opentrons/protocol-designer 8.4.4
schemaVersion: 8
protocolName: BioArt
robot: {model: OT-2 Standard, deckId: ot2_standard}
pipettes:
  p20_single_gen2: {mount: left}
labware:
  Opentrons OT-2 96 Filter Tip Rack 20 µL: {labwareDefURI: opentrons/opentrons_96_filtertiprack_20ul/1, location: 10}
  Palette: {labwareDefURI: opentrons/opentrons_24_tuberack_eppendorf_2ml_safelock_snapcap/1, location: 11}
  Canvas: {labwareDefURI: opentrons/corning_384_wellplate_112ul_flat/2, location: 1}
trashBinLocationUpdate:
  trashBin: cutout12
pipetteTiprackAssignments:
  p20_single_gen2: [opentrons/opentrons_96_filtertiprack_20ul/1]
ingredients:
  - Blue
  - Red
  - yellow
  - white
  - black
  - purple
  - green
  - magenta
  - Brownish
ingredLocations:
  Palette:
    Blue {volume: 2000}: A1
    Red {volume: 2000}: A2
    yellow {volume: 1000}: A3
    white {volume: 1000}: A4
    black {volume: 1000}: A5
    purple {volume: 1000}: A6
    green {volume: 1000}: B1
    magenta {volume: 1000}: B2
    Brownish {volume: 1000}: B3
  Canvas:
    white {volume: 4}: K12, K13, J14, J13, J11, J12, I10, I11, H10, G10, F10, F11, F13, F15, I15, I14, H13, H12, H11, F12, G12, G13, H15, H14, G15, F14, L11-L14, M12, M13
    black {volume: 4}: I12, I13
    black {volume: 5}: G11, G14
    yellow {volume: 4}: L15, L16, M16, M17, N18, O18, L10, L9, M8, M9, N8, N7-P7, P18, N17, P17, O17, P16, P15, M15-O15, O16, M10, N10, N9, O8-O10, P9, P10, P8, P11, N11, M11, N12, N13, M14, N14, N16, O11-O14, P14, P13, P12, K14, J15, H16, I16, G16, F16, E15, E14, E13, E10-E12, D12, D14, D13, D11, F9-I9, J10, K11, C12, C13
savedStepForms:
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: Check your vertical dispense offset to be 11.4.  Your vertical aspirate offset should be 12.  The paper should be taped to the top of a Corning 96 well plate (no lid).
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 4.0
  path: multiDispense
  changeTip: once
  aspirate_labware: Palette
  aspirate_wells: A3
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 12
  dispense_labware: Canvas
  dispense_wells: A4-C4, B5-D5, B6-E6, H6-L6, B7-I7, L7, M7, C8-I8, L8-N8, P8, C9-I9, L9-P9, D10-F10, I10-P10, D11-F11, I11-P11, D12-P12, D13-I13, K13, N13-P13, D14-I14, K14, O14, P14, D15-K15, O15, P15, D16-F16, I16-P16, D17-F17, I17-P17, D18-I18, L18-P18, D19-I19, L19-P19, C20-I20, L20-P20, B21-P21, B22-P22, A23-F23, I23-P23, A24-D24, K24-P24
  dispense_flowRate: 3.7
  dispense_mmFromBottom: 11.4
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_flowRate: 3.78
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 4.0
  path: multiDispense
  changeTip: once
  aspirate_labware: Palette
  aspirate_wells: A5
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 12
  dispense_labware: Canvas
  dispense_wells: A1, A2, B2, A3-C3, H10, G11, H11, J13, J14, H16, G17, H17
  dispense_flowRate: 3.7
  dispense_mmFromBottom: 11.4
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 4.0
  path: multiDispense
  changeTip: once
  aspirate_labware: Palette
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 12
  dispense_labware: Canvas
  dispense_wells: J7, K7, J8, K8, J9, K9, L13, M13, L14-N14, L15-N15, J18, K18, J19, K19, J20, K20
  dispense_flowRate: 3.7
  dispense_mmFromBottom: 11.4
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 4.0
  path: multiDispense
  changeTip: once
  aspirate_labware: Palette
  aspirate_wells: A4
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 12
  dispense_labware: Canvas
  dispense_wells: G10, G16
  dispense_flowRate: 3.7
  dispense_mmFromBottom: 11.4
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  dropTip_location: trashBin
labwareDefinitions:
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commands:
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- waitForResume: {message: Check your vertical dispense offset to be 11.4.  Your vertical aspirate offset should be 12.  The paper should be taped to the top of a Corning 96 well plate (no lid).}
- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons OT-2 96 Filter Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 17, labwareId: Palette, wellName: A3, wellLocation: {origin: bottom, offset: {z: 12, x: 0, y: 0}}, flowRate: 3.7}
- dispense: {pipetteId: p20_single_gen2, volume: 4, labwareId: Canvas, wellName: A4, wellLocation: {origin: bottom, offset: {z: 11.4, x: 0, y: 0}}, flowRate: 3.7}
- dispense: {pipetteId: p20_single_gen2, volume: 4, labwareId: Canvas, wellName: B4, wellLocation: {origin: bottom, offset: {z: 11.4, x: 0, y: 0}}, flowRate: 3.7}
- dispense: {pipetteId: p20_single_gen2, volume: 4, labwareId: Canvas, wellName: C4, wellLocation: {origin: bottom, offset: {z: 11.4, x: 0, y: 0}}, flowRate: 3.7}
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